PsychoPy2experiment version="1.85.4"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1680, 1050]
  Full-screen window = True
  Use version = latest
  expName = untitled
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      image = Images\Relaxation_for_expl.png
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    ImageComponent image_2
      opacity [set every frame] = choice((0,1))
      color = red
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      image = Images\Rel_hint.png
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    CodeComponent code
      Begin Experiment:
        from time import sleep
        from random import choice
  Routine second
    ImageComponent image_3
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      image = Images\Decomposition_for_expl.png
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    ImageComponent image_4
      opacity [set every frame] = choice((0,1))
      color = $[-1.000,1.000,-1.000]
      stopVal [duration (s)] = 5.0
      startVal [time (s)] = 0.0
      image = Images\Dec_hint.png
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  Routine instruction
    ImageComponent instruction_text
      startVal [time (s)] = 0.0
      image = Images\Instruction.png
      size = (1.6,1)
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    KeyboardComponent instruction_end
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 3.0
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  Routine counting
Flow
  Routine instruction
  Routine counting
  Routine trial
  Routine second
